PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '01', 'eeg': 'False'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = norm
  Use version = 2020.2.10
  Window size (pixels) = [1536, 864]
  color = black
  expName = ZooGame_K01v6_750 ms Stim
  logging level = error
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Routines
  Routine OrangFam
    CodeComponent codeText
      Code Type = Both
      Begin Experiment:
        fmsgN=0
      Begin JS Experiment:
        fmsgN = 0;
      Begin JS Routine:
        ftmp = ["These are Melissa\'s three orangutan friends, Fred, Sally and Molly.\n And they are going to be your helpers too.", "Please remember her orangutan friends because you don\'t want to put them in cages."];
        fmsg = ftmp[fmsgN];
      Begin Routine:
        ftmp=["These are Melissa's three orangutan friends, Fred, Sally and Molly.\n And they are going to be your helpers too.",
        "Please remember her orangutan friends because you don’t want to put them in cages."]
        fmsg=ftmp[fmsgN]
      End JS Routine:
        fmsgN = 1;
      End Routine:
        fmsgN=1
    TextComponent text_3
      disabled = True
      durationEstim = 1
      font = Arial Bold
      letterHeight = 0.07
      pos = (-0.45, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $onlineFLAG
      text = Fred
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    TextComponent text_4
      disabled = True
      durationEstim = 1
      letterHeight = 0.07
      pos = (0.45, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $onlineFLAG
      text = Sally
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    TextComponent text_5
      disabled = True
      durationEstim = 1
      letterHeight = 0.07
      pos = (0, -0.90)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $onlineFLAG
      text = Molly
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    ImageComponent image_3
      durationEstim = 1
      image = stimuli/Orang2.bmp
      pos = (-0.35, 0.25)
      saveStartStop = False
      size = (0.6, 0.4)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent image_4
      durationEstim = 1
      image = stimuli/Orang1.bmp
      pos = (0.35, 0.25)
      saveStartStop = False
      size = (0.6, 0.4)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent image_5
      durationEstim = 1
      image = stimuli/Orang3.bmp
      pos = (0, -0.18)
      saveStartStop = False
      size = (0.6, 0.4)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent text_orangfam
      durationEstim = 1
      letterHeight = 0.068
      pos = (0, -0.855)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $fmsg
      wrapWidth = 1.8
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    KeyboardComponent key_resp_3
      allowedKeys = 'return','num_enter'
      durationEstim = 1
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ZooMap1
    CodeComponent startRecording
      Code Type = Both
      Begin Experiment:
        mapmsgN=0

        # BrainProducts EEG Code Starts Here:
        if expInfo['eeg']:
            from psychopy import parallel, core
            # "Serial Port (LFP1)"
            port = parallel.ParallelPort(address=0x378)
            # Send Start Marker (S1)
            port.setData( int("00000001", 2) )
            core.wait(0.2)
            port.setData(0) # set all pins back to low(0)
      Begin JS Experiment:
        mapmsgN = 0;
      Begin JS Routine:
        maptmp = ["Here is the map of the zoo and we are going to help Zookeeper Melissa in different areas.", "Let\'s begin at the Zoo entrance!"];
        mapmsg = maptmp[mapmsgN];
      Begin Routine:
        maptmp=["Here is the map of the zoo and we are going to help Zookeeper Melissa in different areas.",
        "Let’s begin at the Zoo entrance!"]
        mapmsg = maptmp[mapmsgN]
      End Experiment:
        if expInfo['eeg']=='1':
            # Reset the port to its default state
            port.setData( int("00000001", 2) )
            core.wait(0.2)
            port.setData(0) # set all pins back to low(0)
            # Close the serial port
            port.close()
      End JS Routine:
        mapmsgN = 1;
      End Routine:
        mapmsgN=1
    ImageComponent zoomap
      durationEstim = 1
      image = stimuli/MapStop_Start1.bmp
      pos = (0, 0.02)
      saveStartStop = False
      size = (1.3, 0.78)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent text_zoomap1
      durationEstim = 1
      letterHeight = 0.07
      pos = (0, -0.85)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $mapmsg
      wrapWidth = 1.8
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    KeyboardComponent key_resp_7
      allowedKeys = 'return','num_enter'
      durationEstim = 1
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Prac
    CodeComponent code_pcorrectKey
      Code Type = Both
      Begin Experiment:
        pnumnogo=0
        paccnogo=0
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        pnumnogo = 0;
        paccnogo = 0;
      Begin JS Routine:
        if ((pimage === "Go")) {
            pcorrectKey = "space";
        }
        if ((pimage === "NoGo")) {
            pcorrectKey = undefined;
        }
        thisExp.addData("pcorrectKey", pcorrectKey);
      Begin Routine:
        # assign correct keypress
        if pimage == 'Go':
            pcorrectKey = 1

        if pimage == 'NoGo':
            pcorrectKey = None

        thisExp.addData('pcorrectKey', pcorrectKey) #save correct key response
      End JS Routine:
        if ((pimage === "NoGo")) {
            pnumnogo = (pnumnogo + 1);
            if (((Respond.corr) || (Respond.keys === pcorrectKey))) {
                paccnogo = (paccnogo + 1);
            }
        }
        thisExp.addData("pnumnogo", pnumnogo);
        thisExp.addData("paccnogo", paccnogo);
      End Routine:
        if pimage == 'NoGo':
            pnumnogo=pnumnogo+1

            if Respond.corr:
                paccnogo=paccnogo+1

        thisExp.addData('pnumnogo', pnumnogo)
        thisExp.addData('paccnogo', paccnogo)
    PolygonComponent Fxation
      fillColor = $[1,1,1]
      shape = cross
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = height
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    ImageComponent Stim
      image [set every repeat] = $ps1
      size = (0.6, 0.4)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.75
      units = height
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    KeyboardComponent Respond
      allowedKeys = '1','5','space'
      correctAns = $pcorrectKey
      forceEndRoutine = True
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.75
      store = first key
      storeCorrect = True
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  Routine Welcome1
    CodeComponent cpuinfo
      Code Type = Both
      Begin Experiment:
        win.mouseVisible = False
      Begin JS Experiment:
        document.body.style.cursor='none';

        var sUsrAg;
        var nIdx;
        function getBrowserId () {
         var browsers = ["MSIE", "Firefox", "Safari", "Chrome", "Opera"];
         sUsrAg = window.navigator.userAgent,
         nIdx = browsers.length - 1;
         for (nIdx; nIdx > -1 && sUsrAg.indexOf(browsers [nIdx]) === -1; nIdx--);

          return browsers[nIdx];
        }
        // save cpu & browser information
        thisExp=psychoJS.experiment;
        expInfo['OS'] = window.navigator.platform;
        expInfo['browser'] = getBrowserId();
        expInfo['xResolution'] = screen.width;
        expInfo['yResolution'] = screen.height;
      Begin JS Routine:
        wmsg1="This is Zookeeper Melissa.\nShe needs your help!\nPlease press the [ENTER] key to proceed."
      Begin Routine:
        wmsg1='This is Zookeeper Melissa.\nShe needs your help!'
      End JS Experiment:
        document.body.style.cursor='auto';
    TextComponent text
      durationEstim = 1
      letterHeight = 0.1
      pos = (0, 0.72)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Welcome to the Zoo!
      wrapWidth = 1.8
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    ImageComponent image_1
      durationEstim = 1
      image = stimuli/Zookeeper1.bmp
      pos = (0, 0.02)
      saveStartStop = False
      size = (0.75,0.555)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent text_2
      durationEstim = 1
      letterHeight = 0.08
      pos = (0, -0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $wmsg1
      wrapWidth = 1.8
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    KeyboardComponent key_resp_2
      allowedKeys = 'return','num_enter'
      durationEstim = 1
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine BlockList
    CodeComponent code_correctKey
      Code Type = Both
      Begin Experiment:
        accnogo=0
        numnogo=0
      Begin JS Experiment:
        accnogo = 0;
        numnogo = 0;
      Begin JS Routine:
        // assign correct keypress
        if ((gonogo === 101)) {
            correctKey = "space";
        }
        if ((gonogo === 102)) {
            correctKey = undefined;
        }
        thisExp.addData("correctKey", correctKey);
      Begin Routine:
        # assign correct keypress
        if image == 'Go':
            correctKey = 1
            trig = "1100101"

        if image == 'NoGo':
            correctKey = None
            trig = "1100110"

        thisExp.addData('correctKey', correctKey) #save correct key response
      Each Frame:
        if expInfo['eeg'] and Stim2.status == STARTED:
            port.setData( int(trig, 2) ) # send S 1; the 0's and 1's here reffer to if each pin is set to high(1) or low(0), which will consequently send out the trigger associated with the number that results from the pins set to high. Here my first pin (pin2) is set to send out 1 so sends out S1.
            #core.wait(0.2) # need to wait before setting pin back to low in order to ensure the trigger is sent

        if expInfo['eeg'] and Stim2.status == STOPPED:
            port.setData(0) # set all pins back to low(0)
      End JS Routine:
        // count number of nogos & correct responses
        if ((gonogo === 102)) {
            numnogo = (numnogo + 1);
            if (((key_resp.corr) || (key_resp.keys === correctKey))) {
                accnogo = (accnogo + 1);
            }
        }
        thisExp.addData("key_resp_rt", key_resp.rt)
        thisExp.addData("key_resp_corr", key_resp.corr)
        thisExp.addData("numnogo", numnogo);
        thisExp.addData("accnogo", accnogo);
      End Routine:
        # count number of nogos
        if gonogo == 102:
            numnogo=numnogo+1
            # count number of correct
            if key_resp.corr:
                accnogo=accnogo+1

        thisExp.addData('key_resp_rt', key_resp.rt)
        thisExp.addData('key_resp_corr', key_resp.corr)
        thisExp.addData('numnogo', numnogo)
        thisExp.addData('accnogo', accnogo)
    PolygonComponent Fixation2
      fillColor = $[1,1,1]
      shape = cross
      size = (0.08, 0.08)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.3
      units = height
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    ImageComponent Stim2
      image [set every repeat] = $s1
      size = (0.6, 0.4)
      startVal [time (s)] = .30
      stopVal [duration (s)] = 0.75
      units = height
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    KeyboardComponent key_resp
      allowedKeys = '1','5','space'
      correctAns = $correctKey
      forceEndRoutine = True
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.75
      store = first key
      storeCorrect = True
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  Routine OutBlock1
    CodeComponent EndFeedback
      Code Type = Both
      Begin JS Routine:
        // get list of responses
        dataSoFar = psychoJS.experiment._trialsData;
        acc = 0;
        chunkLength = 40;
        num = chunkLength;

        // Get Accurracy and Mean RT

        sumRt = 0;
        meanRt = 0;
        //for (let i=0; i<psychoJS.experiment._trialsData.length; i++)
        for (var i=(dataSoFar.length-chunkLength); i<dataSoFar.length; i++)
        {
            if ('key_resp.rt' in psychoJS.experiment._trialsData[i]) {
                sumRt += psychoJS.experiment._trialsData[i]['key_resp.rt'];
                acc += psychoJS.experiment._trialsData[i]['key_resp.corr'];
            }
        }
        //meanRt=sumRt/(acc - accnogo); // acc only contains accurate go trials
        meanRt=sumRt/acc;

        // Text Feedback
        if ((numnogo > 0)) {
            if ((((accnogo / numnogo) * 100) >= 90)) {
                Feedback = "Try to catch them even faster next time!";
            } else {
                Feedback = "Keep watching out for the Orangutan friends!";
            }
        } else {
            Feedback = "This should not happen: numnogo = 0";
        }
        acctotal=(accnogo + acc);
        msg = String(parseInt(accnogo))+"/"+String(parseInt(numnogo))+" "+String(parseInt(acctotal))+"/"+String(parseInt(num))+" "+String(parseFloat(meanRt).toFixed(2));

        accnogo = 0;
        numnogo = 0;
      Begin Routine:
        acc = trials.data['key_resp.corr'].sum()
        num = trials.nTotal

        try:
            meanRt = trials.data['key_resp.rt'].mean()
        except:
            print("no responses recorded!")
            meanRt = 0

        if numnogo > 0:
            if (accnogo/numnogo)*100 >= 90:
                Feedback='Try to catch them even faster next time!'
            else:
                Feedback='Keep watching out for the Orangutan friends!'
        else:
            Feedback='This should not happen: numnogo = 0'

        #[accnogo]/[numnogo] [acc]/[num] [meanrt]
        msg = "%i/%i %i/%i %.2f" %(accnogo,numnogo,acc,num,meanRt)

        # rest variables
        accnogo=0
        numnogo=0
    ImageComponent image_2
      durationEstim = 1
      image [set every repeat] = $OutBlockStim
      pos = (-0.65, 0)
      size = (0.294, 0.294)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent Feedback_text
      durationEstim = 1
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Feedback
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    TextComponent summary_text
      disabled = True
      durationEstim = 1
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
      wrapWidth = 1
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    KeyboardComponent key_resp_15
      allowedKeys = 'return','num_enter'
      durationEstim = 1
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pracintro
    TextComponent text_13
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      wrapWidth = 2
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      text:
        The animals have gotten out of their cages!

        You can help Zookeeper Melissa and her orangutan friends
        by pressing the button when you see an animal.

        Remember that the orangutans are helping.
        Don't press the button when you see an orangutan friend!
    TextComponent text_11
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = Are you ready to help Zookeeper Melissa?
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    ImageComponent image_9
      image = stimuli/Zookeeper1.bmp
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = Fred
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    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = Sally
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    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = Molly
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    ImageComponent image_10
      image = stimuli/Orang2.bmp
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
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    ImageComponent image_11
      image = stimuli/Orang1.bmp
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
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    ImageComponent image_12
      image = stimuli/Orang3.bmp
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
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    TextComponent text_16
      letterHeight = 0.1
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      text = Let's Practice!
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  Routine Intro
    TextComponent intro
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Get Ready!
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    KeyboardComponent key_resp_12
      allowedKeys = 'space','return','num_enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = nothing
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  Routine PracticeOut
    CodeComponent pEndFeedback
      Code Type = Both
      Begin JS Routine:
        // Get list of responses
        presp = psychoJS.experiment._trialsData;
        // Filter data to get correct trials
        //pcorr = presp.filter((trial) => (trial['Respond.corr'] === 1))
        // Get count of correct trials
        pacc = presp.reduce((a, b) => a + b['Respond.corr'], 0);
        // Get Trial Length
        pnum = presp.length;

        // Mean RTs:
        sumRt = 0;
        for (let eachResp=0; eachResp<psychoJS.experiment._trialsData.length; eachResp++)
        {
          if ('Respond.rt' in psychoJS.experiment._trialsData[eachResp]) {
            sumRt += psychoJS.experiment._trialsData[eachResp]['Respond.rt'];
          }
        }
        pmeanRt=sumRt/(pacc - paccnogo);
        //console.log(sumRt)

        if ((pnumnogo > 0)) {
            if ((((paccnogo / pnumnogo) * 100) >= 90)) {
                pFeedback = "Try to catch them even faster next time!";
            } else {
                pFeedback = "Keep watching out for the Orangutan friends!";
            }
        } else {
            pFeedback = "This should not happen: numnogo = 0";
        }
        //[accnogo]/[numnogo] [acc]/[num] [meanrt]
        pmsg = String(parseInt(paccnogo))+"/"+String(parseInt(pnumnogo))+" "+String(parseInt(pacc))+"/"+String(parseInt(pnum))+" "+String(parseFloat(pmeanRt).toFixed(2));
      Begin Routine:
        pacc = Practice.data['Respond.corr'].sum()
        pnum = Practice.nTotal

        try:
            pmeanRt = Practice.data['Respond.rt'].mean()
        except:
            print("no responses recorded!")
            pmeanRt = 0

        if pnumnogo > 0:
            if (paccnogo/pnumnogo)*100 >= 90:
                pFeedback='Try to catch them even faster next time!'
            else:
                pFeedback='Keep watching out for the Orangutan friends!'
        else:
            pFeedback='This should not happen: numnogo = 0'

        #[accnogo]/[numnogo] [acc]/[num] [meanrt]
        pmsg = "%i/%i %i/%i %.2f" %(paccnogo,pnumnogo,pacc,pnum,pmeanRt)
    ImageComponent image
      durationEstim = 1
      image = stimuli/MapFriends.bmp
      pos = (-0.5, 0)
      saveStartStop = False
      size = (0.4, 0.294)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent OutPrac
      durationEstim = 1
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Great job helping! 
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    TextComponent psummary_text
      disabled = True
      durationEstim = 1
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $pmsg
      wrapWidth = 1.8
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    KeyboardComponent key_resp_11
      allowedKeys = 'return','num_enter'
      durationEstim = 1
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Fred
    TextComponent text_9
      durationEstim = 1
      letterHeight = 0.1
      pos = (0, -0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Fred
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    PolygonComponent white_backgrnd1
      durationEstim = 1
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = rectangle
      size = (0.64, 0.48)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent image_13
      durationEstim = 1
      image = stimuli/Orang2.bmp
      saveStartStop = False
      size = (0.6, 0.4)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_resp_4
      allowedKeys = 'return','num_enter'
      durationEstim = 1
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Sally
    TextComponent text_10
      durationEstim = 1
      letterHeight = 0.1
      pos = (0, -0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Sally
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    PolygonComponent white_backgrnd2
      durationEstim = 1
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = rectangle
      size = (0.64, 0.48)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent image_14
      durationEstim = 1
      image = stimuli/Orang1.bmp
      saveStartStop = False
      size = (0.6, 0.4)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_resp_5
      allowedKeys = 'return','num_enter'
      durationEstim = 1
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Molly
    TextComponent text_17
      durationEstim = 1
      letterHeight = 0.1
      pos = (0, -0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Molly
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    PolygonComponent white_backgrnd3
      durationEstim = 1
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = rectangle
      size = (0.64, 0.48)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent image_15
      durationEstim = 1
      image = stimuli/Orang3.bmp
      saveStartStop = False
      size = (0.6, 0.4)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_resp_6
      allowedKeys = 'return','num_enter'
      durationEstim = 1
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instructions
    CodeComponent code_instrtext
      Code Type = Both
      Begin JS Routine:
        inmsg="An accident happened in the zoo today and all animals have gotten out of their cages! What a mess!\n\
        You can help Zookeeper Melissa and her orangutan friends to put animals back in cages.\n\n\
        You can help by pressing the SPACE bar every time you see an animal.\n\
        However, the orangutans are helping you, so you don’t want to put them in cages. So DO NOT press the SPACE bar when you see an orangutan friend!"
      Begin Routine:
        inmsg="The animals have gotten out of their cages!\n"\
              "You can help Zookeeper Melissa and her orangutan friends \n"\
              "by pressing the button when you see an animal.\n\n"\
              "Remember that the orangutans are helping.\n"\
              "Don't press the button when you see an orangutan friend!"
    TextComponent text_12
      durationEstim = 1
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $inmsg
      wrapWidth = 1.8
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    KeyboardComponent key_resp_8
      allowedKeys = 'return','num_enter'
      durationEstim = 1
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Welcome2
    ImageComponent image_6
      durationEstim = 1
      image = stimuli/Zookeeper1.bmp
      pos = (0, 0.02)
      saveStartStop = False
      size = (0.75,0.555)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent text_14
      durationEstim = 1
      letterHeight = 0.1
      pos = (0, -0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.8
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      text:
        Are you ready to help Zookeeper
        Melissa?
    KeyboardComponent key_resp_9
      allowedKeys = 'return','num_enter'
      durationEstim = 1
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine PracticeReady
    TextComponent text_15
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Let's Practice!
      wrapWidth = 2
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    KeyboardComponent key_resp_10
      allowedKeys = 'return','num_enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine ZooMap2
    CodeComponent code_breakMsg
      Code Type = Auto->JS
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      Begin Routine:
        if Procedure == "Block2":
            breakMsg="You can take a short break now if you want. Once you are ready to continue heading to the panda palace, press the [ENTER] key!"
        elif Procedure == "Block4":
            breakMsg="You can take a short break now if you want. Once you are ready to continue heading to the monkey palace, press the [ENTER] key!"
        elif Procedure == "Block6":
            breakMsg="You can take a short break now if you want. Once you are ready to continue heading to the kangaroo palace, press the [ENTER] key!"
        else:
            breakMsg == ""
    ImageComponent image_7
      durationEstim = 1
      image [set every repeat] = $ZooMap
      pos = (0, 0.02)
      saveStartStop = False
      size = (1.3, 0.78)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent text_break
      durationEstim = 1
      letterHeight = 0.068
      pos = (0, -0.855)
      startVal [time (s)] = 0.0
      text [set every repeat] = $breakMsg
      wrapWidth = 1.8
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    KeyboardComponent key_resp_13
      allowedKeys [set every repeat] = 'return','num_enter'
      durationEstim = 1
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Out
    TextComponent text_18
      durationEstim = 1
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      wrapWidth = 1.8
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      text [set every repeat]:
        Congratulations! All of the animals are back in their cages! You did a great job!

        Please wait while we save the results...
    KeyboardComponent key_resp_14
      allowedKeys = 'space','return','num_enter'
      durationEstim = 1
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      store = nothing
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  Routine Intr1
    TextComponent text_19
      durationEstim = 1
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        An accident happened in the zoo today and all animals have gotten out of their cages! What a mess!
        You can help Zookeeper Melissa and her orangutan friends to put animals back in cages.

        You can help by pressing the SPACE bar every time you see an animal.

        However, the orangutans are helping you, so you don’t want to put them in cages. So DO NOT press the SPACE bar when you see an orangutan friend!
    KeyboardComponent key_resp_16
      allowedKeys = 'enter','return','num_enter'
      durationEstim = 1
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine blankWindow
    CodeComponent code_responsewindow
      Code Type = Auto->JS
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      End Routine:
        if response_window.keys:
            thisExp.addData('key_resp_rt', (response_window.rt+0.75))
            thisExp.addData('key_resp_corr', response_window.corr)
            # remove accnogo if button pressed
            if gonogo == 102:
                accnogo=accnogo-1
                thisExp.addData('accnogo', accnogo)
    KeyboardComponent response_window
      allowedKeys = '1','5','space'
      correctAns = $correctKey
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      store = first key
      storeCorrect = True
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  Routine practiceWindow
    KeyboardComponent practice_window
      allowedKeys = '1','5','space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      store = first key
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Flow
  Routine Welcome1
  Routine OrangFam
  Routine Fred
  Routine Sally
  Routine Molly
  Routine Instructions
  Routine ZooMap1
  Routine Welcome2
  Routine OrangFam
  Routine PracticeReady
  LoopInitiator Practice loopType="TrialHandler"
    conditionsFile = stimuli\Practice.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ps1', 'stimuli/Orang1.bmp'), ('pgonogo', 102), ('pimage', 'NoGo'), ('pimagecode', 11), ('pTarget', 'stimuli/Orang1.bmp'), ('pcorrectKey', None)]),
      OrderedDict([('ps1', 'stimuli/Orang2.bmp'), ('pgonogo', 102), ('pimage', 'NoGo'), ('pimagecode', 12), ('pTarget', 'stimuli/Orang2.bmp'), ('pcorrectKey', None)]),
      OrderedDict([('ps1', 'stimuli/Orang3.bmp'), ('pgonogo', 102), ('pimage', 'NoGo'), ('pimagecode', 13), ('pTarget', 'stimuli/Orang3.bmp'), ('pcorrectKey', None)]),
      OrderedDict([('ps1', 'stimuli/Bongo1.bmp'), ('pgonogo', 101), ('pimage', 'Go'), ('pimagecode', 14), ('pTarget', 'stimuli/Bongo1.bmp'), ('pcorrectKey', 1.0)]),
      OrderedDict([('ps1', 'stimuli/Cougar2.bmp'), ('pgonogo', 101), ('pimage', 'Go'), ('pimagecode', 15), ('pTarget', 'stimuli/Cougar2.bmp'), ('pcorrectKey', 1.0)]),
      OrderedDict([('ps1', 'stimuli/Kangaroo3.bmp'), ('pgonogo', 101), ('pimage', 'Go'), ('pimagecode', 16), ('pTarget', 'stimuli/Kangaroo3.bmp'), ('pcorrectKey', 1.0)]),
      OrderedDict([('ps1', 'stimuli/Koala3.bmp'), ('pgonogo', 101), ('pimage', 'Go'), ('pimagecode', 17), ('pTarget', 'stimuli/Koala3.bmp'), ('pcorrectKey', 1.0)]),
      OrderedDict([('ps1', 'stimuli/RedPanda19.bmp'), ('pgonogo', 101), ('pimage', 'Go'), ('pimagecode', 18), ('pTarget', 'stimuli/RedPanda18.bmp'), ('pcorrectKey', 1.0)]),
      OrderedDict([('ps1', 'stimuli/Rhino9.bmp'), ('pgonogo', 101), ('pimage', 'Go'), ('pimagecode', 19), ('pTarget', 'stimuli/Rhino9.bmp'), ('pcorrectKey', 1.0)])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
    Routine Prac
    Routine practiceWindow
  LoopTerminator Practice
  Routine PracticeOut
  Routine ZooMap1
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = stimuli\BlockList.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Procedure', 'Block1'), ('order', 1), ('trialFiles', 'stimuli/Trial1.csv'), ('OutBlockStim', 'stimuli/MapKoala.bmp'), ('ZooMap', None), ('mapDur', 0), ('breakMsg', None)]),
      OrderedDict([('Procedure', 'Block2'), ('order', 2), ('trialFiles', 'stimuli/Trial2.csv'), ('OutBlockStim', 'stimuli/MapKoala.bmp'), ('ZooMap', 'stimuli/MapStop1_KoalaKove.bmp'), ('mapDur', 1), ('breakMsg', 'You can take a short break now if you want. Once you are ready to continue heading to the panda palace, press the [ENTER] key!')]),
      OrderedDict([('Procedure', 'Block3'), ('order', 3), ('trialFiles', 'stimuli/Trial3.csv'), ('OutBlockStim', 'stimuli/MapPanda.bmp'), ('ZooMap', None), ('mapDur', 0), ('breakMsg', None)]),
      OrderedDict([('Procedure', 'Block4'), ('order', 4), ('trialFiles', 'stimuli/Trial4.csv'), ('OutBlockStim', 'stimuli/MapPanda.bmp'), ('ZooMap', 'stimuli/MapStop2_Panda.bmp'), ('mapDur', 1), ('breakMsg', 'You can take a short break now if you want. Once you are ready to continue heading to the monkey palace, press the [ENTER] key!')]),
      OrderedDict([('Procedure', 'Block5'), ('order', 5), ('trialFiles', 'stimuli/Trial5.csv'), ('OutBlockStim', 'stimuli/MapMonkey.bmp'), ('ZooMap', None), ('mapDur', 0), ('breakMsg', None)])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
    Routine Intro
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $trialFiles
      loopType = random
      nReps = 1
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      Routine BlockList
      Routine blankWindow
    LoopTerminator trials
    Routine OutBlock1
    LoopInitiator maps loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $mapDur
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      Routine ZooMap2
    LoopTerminator maps
  LoopTerminator blocks
  Routine Out
